CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:54
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ImageName>.*)_testes(?P<ImageNumber>[0-9])_(?P<Channel>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'MGP': u'ImageNumber', u'DNA': u'ImageNumber'}]
    Image set matching method:Metadata
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.2965
    Relative pixel spacing in Y:0.2965
    Relative pixel spacing in Z:0.4836
    Select the rule criteria:and (file does contain "DNA")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MPG")
    Name to assign these images:MGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:MGP
    Name the output image:RescaleIntensityMGP
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:6|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
    Select the input image:RescaleIntensityMGP
    Name the output image:ResizedMPG
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:7|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
    Select the input image:ResizedMPG
    Name the output image:MedianFilterMPG
    Window:3

Threshold:[module_num:8|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notes:['']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
    Select the input image:ResizedMPG
    Name the output image:ThresholdMPG
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
Opening:[module_num:9|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
    Select the input image:ThresholdMPG
    Name the output image:OpeningMPG
    Structuring element:disk,2

ConvertImageToObjects:[module_num:10|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
    Select the input image:OpeningMPG
    Name the output object:MPGObj
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ResizeObjects:[module_num:11|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
    Select the input object:MPGObj
    Name the output object:MPGSizedBack
    Method:Factor
    Factor:2
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
RescaleIntensity:[module_num:12|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
    Select the input image:DNA
    Name the output image:RescaleIntensityDNA
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:13|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notes:['Downsampling the image will increase the processing speed. This is a good option when the objects of interest are large enough, like the nuclei in this monolayer, and retain their shape shrunken.']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
    Select the input image:RescaleIntensityDNA
    Name the output image:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

GaussianFilter:[module_num:14|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
    Select the input image:ResizeDNA
    Name the output image:GaussianforLobes
    Sigma:4

Threshold:[module_num:15|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
    Select the input image:GaussianforLobes
    Name the output image:ThresholdLobes
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.18,1.0
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
Watershed:[module_num:16|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notes:['']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
    Select the input image:ThresholdLobes
    Name the output object:WatershedLobes
    Generate from:Distance
    Markers:ResizeDNA
    Mask:MaskBlue
    Connectivity:1
    Compactness:0.0
    Footprint:44
    Downsample:10
    Separate watershed labels:Yes

MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:WatershedLobes
    Calculate the Zernike features?:No

FilterObjects:[module_num:18|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notes:['The gols is to select the largest/main lobe, so the minimum value need to be changed based on the size of lobes. ', '600000 for 4', '400000 for 1', '250000 for 3', '', '']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
    Select the objects to filter:WatershedLobes
    Name the output objects:Lobes
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_SurfaceArea
    Filter using a minimum measurement value?:Yes
    Minimum value:400000
    Filter using a maximum measurement value?:No
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
ResizeObjects:[module_num:19|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
    Select the input object:Lobes
    Name the output object:LobesObjectsResized
    Method:Factor
    Factor:2
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
ResizeObjects:[module_num:20|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
    Select the input object:WatershedLobes
    Name the output object:AllLobesObjectsResized
    Method:Factor
    Factor:2
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
MaskImage:[module_num:21|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
    Select the input image:OpeningMPG
    Name the output image:ResizedOpenMPGinLobes
    Use objects or an image as a mask?:Objects
    Select object for mask:Lobes
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    Invert the mask?:No

ConvertImageToObjects:[module_num:22|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
    Select the input image:ResizedOpenMPGinLobes
    Name the output object:MPGObjInLobes
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ResizeObjects:[module_num:23|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
    Select the input object:MPGObjInLobes
    Name the output object:ResizeMPGinLobes
    Method:Factor
    Factor:2
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
MaskImage:[module_num:24|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
    Select the input image:GaussianforLobes
    Name the output image:NucleiInLobes
    Use objects or an image as a mask?:Objects
    Select object for mask:Lobes
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    Invert the mask?:No

Threshold:[module_num:25|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
    Select the input image:NucleiInLobes
    Name the output image:DifferentiatedThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.3,1.0
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
DilateImage:[module_num:26|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
    Select the input image:DifferentiatedThreshold
    Name the output image:ExpandedDiffThresh
    Structuring element:disk,3

GaussianFilter:[module_num:27|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
    Select the input image:ResizeDNA
    Name the output image:GaussianDNA
    Sigma:1

MaskImage:[module_num:28|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
    Select the input image:GaussianDNA
    Name the output image:MaskedResizedDNA
    Use objects or an image as a mask?:Objects
    Select object for mask:Lobes
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    Invert the mask?:No

MaskImage:[module_num:29|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
    Select the input image:MaskedResizedDNA
    Name the output image:SSCMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:ExpandedDiffThresh
    Invert the mask?:Yes

Threshold:[module_num:30|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
    Select the input image:SSCMasked
    Name the output image:ThresholdSSC
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.15,1.0
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    Two-class or three-class thresholding?:Two classes
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
Watershed:[module_num:31|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
    Select the input image:ThresholdSSC
    Name the output object:WatershedSSC
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:4
    Downsample:1
    Separate watershed labels:No

DeclumpObjects:[module_num:32|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
    Select the input object:WatershedSSC
    Name the output object:DeclumpSSCObjects
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1
    Minimum distance between seeds:8
    Minimum absolute internal distance:0
    Pixels from border to exclude:0
    Maximum number of seeds:0
    Structuring element for seed dilation:ball,3
    Watershed connectivity:1

DeclumpObjects:[module_num:33|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enabled:False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
    Select the input object:WatershedSSC
    Name the output object:DeclumpSSCObjects2
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1
    Minimum distance between seeds:8
    Minimum absolute internal distance:0
    Pixels from border to exclude:0
    Maximum number of seeds:0
    Structuring element for seed dilation:ball,4
    Watershed connectivity:2

ResizeObjects:[module_num:34|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
    Select the input object:DeclumpSSCObjects
    Name the output object:NucleiSSCBack
    Method:Factor
    Factor:2
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
ConvertObjectsToImage:[module_num:35|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enabled:False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
    Select the input objects:NucleiSSCBack
    Name the output image:NucleiImage
    Select the color format:uint16
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
MeasureObjectSizeShape:[module_num:36|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
    Select objects to measure:DeclumpSSCObjects
    Calculate the Zernike features?:No

MeasureImageAreaOccupied:[module_num:37|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
    Hidden:4
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:DeclumpSSCObjects
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Lobes
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    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:DifferentiatedThreshold
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:MPGObjInLobes
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
MeasureObjectIntensity:[module_num:38|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
    Hidden:1
    Select an image to measure:MGP
    Select objects to measure:ResizeMPGinLobes

SaveImages:[module_num:39|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nuclei_Lable
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MPGNEWImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MPG_Lable
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MPGNEWImageinLobes
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MPGinLobes_Lable
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:42|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityDNA
    Name the output image:NucleiOutline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:NucleiSSCBack

OverlayOutlines:[module_num:43|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityMGP
    Name the output image:MPGOutline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:MPGSizedBack
    Select outline color:Green
    Select objects to display:LobesObjectsResized

OverlayOutlines:[module_num:44|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityDNA
    Name the output image:MPGinLobesOutline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:ResizeMPGinLobes
    Select outline color:Green
    Select objects to display:LobesObjectsResized

OverlayOutlines:[module_num:45|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityDNA
    Name the output image:LobeOutline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#21FE06
    Select objects to display:LobesObjectsResized

SaveImages:[module_num:46|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nuclei_Outline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:47|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
    Select the type of image to save:Image
    Select the image to save:MPGOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:MGP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MPG_Outline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:48|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
    Select the type of image to save:Image
    Select the image to save:MPGinLobesOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:MGP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MPGinLobes_Outline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:LobeOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_LobesOutline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayObjects:[module_num:50|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
    Input:RescaleIntensityMGP
    Name the output image:OverlayMPG
    Objects:MPGSizedBack
    Opacity:0.3

OverlayObjects:[module_num:51|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
    Input:RescaleIntensityDNA
    Name the output image:OverlayNuclei
    Objects:NucleiSSCBack
    Opacity:0.3

SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:OverlayNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Nuclei_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:OverlayMPG
    Select method for constructing file names:From image filename
    Select image name for file prefix:MGP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_MPG_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:54|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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