CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file does contain "40X_SB")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.3459
    Relative pixel spacing in Y:0.3459
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does contain "C4-")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1-")
    Name to assign these images:Ch1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2-")
    Name to assign these images:Ch2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3-")
    Name to assign these images:Ch3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:DNA
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

MedianFilter:[module_num:6|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
    Select the input image:Threshold
    Name the output image:MedianFilter
    Window:3

Watershed:[module_num:7|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
    Select the input image:Threshold
    Name the output object:PreWatershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No

DeclumpObjects:[module_num:8|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
    Select the input object:PreWatershed
    Name the output object:Watershed
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:2
    Minimum distance between seeds:7
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1
    Watershed connectivity:1

OverlayObjects:[module_num:9|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
    Input:DNA
    Name the output image:OverlayObjects
    Objects:Watershed
    Opacity:0.3

DilateObjects:[module_num:10|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
    Select the input object:Watershed
    Name the output object:Cells
    Structuring element:ball,3

Threshold:[module_num:11|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
    Select the input image:Ch1
    Name the output image:ThresholdCh1
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:12|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
    Select the input image:Ch2
    Name the output image:ThresholdCh2
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:13|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
    Select the input image:Ch3
    Name the output image:ThresholdCh3
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:14|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
    Select images to measure:ThresholdCh1, ThresholdCh2, ThresholdCh3
    Select objects to measure:Cells

FilterObjects:[module_num:15|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
    Select the objects to filter:Cells
    Name the output objects:Ch1PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:16|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
    Select the objects to filter:Cells
    Name the output objects:Ch2PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:17|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
    Select the objects to filter:Cells
    Name the output objects:Ch3PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:18|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
    Select the objects to filter:Cells
    Name the output objects:Ch12PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:19|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
    Select the objects to filter:Cells
    Name the output objects:Ch13PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:20|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
    Select the objects to filter:Cells
    Name the output objects:Ch23PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:21|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
    Select the objects to filter:Cells
    Name the output objects:Ch123PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_ThresholdCh3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
OverlayObjects:[module_num:22|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
    Input:Ch1
    Name the output image:OverlayObjectsCh1
    Objects:Ch1PositiveCells
    Opacity:0.3

OverlayObjects:[module_num:23|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
    Input:Ch2
    Name the output image:OverlayObjectsCh2
    Objects:Ch2PositiveCells
    Opacity:0.3

OverlayObjects:[module_num:24|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
    Input:Ch3
    Name the output image:OverlayObjectsCh3
    Objects:Ch3PositiveCells
    Opacity:0.3

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsCh1
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayCh1
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsCh2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayCh2
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjectsCh3
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OverlayCh3
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
