CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ImageName>.*)_worm(?P<ImageNumber>[0-9])_Ovaries_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'FGP': 'ImageNumber', 'Oocyte': 'ImageNumber', 'Nuclei': 'ImageNumber'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.8302
    Relative pixel spacing in Y:0.8302
    Relative pixel spacing in Z:4.1346
    Select the rule criteria:and (file does contain "C0")
    Name to assign these images:FGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Oocyte
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:Oocyte
    Name the output image:RescaleIntensityOocyte
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:6|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notes:['Downsampling the image will increase the processing speed. This is a good option when the objects of interest are large enough, like the nuclei in this monolayer, and retain their shape shrunken.']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
    Select the input image:RescaleIntensityOocyte
    Name the output image:ResizeOocyte
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Watershed:[module_num:7|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notes:['FootPrint: 8 and 6 work better']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
    Select the input image:ResizeOocyte
    Name the output object:OocyteObj
    Generate from:Distance
    Markers:DilateHighThresh
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:6
    Downsample:1
    Separate watershed labels:Yes

DeclumpObjects:[module_num:8|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notes:['NOT working']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enabled:False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
    Select the input object:WatershedOocyte
    Name the output object:DeclumpObjects
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:5
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:0
    Structuring element for seed dilation:ball,3
    Watershed connectivity:1

ResizeObjects:[module_num:9|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
    Select the input object:OocyteObj
    Name the output object:OocyteObjectsSizedBack
    Method:Factor
    Factor:2
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
RescaleIntensity:[module_num:10|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
    Select the input image:FGP
    Name the output image:RescaleIntensityFGP
    Rescaling method:Stretch each image to use the full intensity range
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
Resize:[module_num:11|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
    Select the input image:RescaleIntensityFGP
    Name the output image:ResizedFGP
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:12|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
    Select the input image:ResizedFGP
    Name the output image:MedianFilterFGP
    Window:3

Threshold:[module_num:13|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notes:['']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
    Select the input image:ResizedFGP
    Name the output image:ThresholdFGP
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:5
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
Threshold:[module_num:14|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enabled:False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
    Select the input image:ResizedFGP
    Name the output image:ThresholdFGP2
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Opening:[module_num:15|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enabled:False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
    Select the input image:ThresholdFGP
    Name the output image:OpeningFGP
    Structuring element:disk,2

ConvertImageToObjects:[module_num:16|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
    Select the input image:ThresholdFGP
    Name the output object:FGPObj
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:17|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enabled:False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
    Select the input image:ThresholdFGP
    Name the output object:FGPObj2
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

ResizeObjects:[module_num:18|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
    Select the input object:FGPObj
    Name the output object:FGPSizedBack
    Method:Factor
    Factor:2
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
MeasureObjectSizeShape:[module_num:19|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enabled:False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
    Select object sets to measure:FGPSizedBack, OocyteObjectsSizedBack
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:20|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enabled:False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
    Measure the area occupied by:Objects
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    Select object sets to measure:FGPSizedBack, OocyteObjectsSizedBack

MeasureObjectIntensity:[module_num:21|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enabled:False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
    Select images to measure:FGP, Oocyte
    Select objects to measure:FGPSizedBack, OocyteObjectsSizedBack

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityOocyte
    Name the output image:OocyteOutline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FF
    Select objects to display:OocyteObjectsSizedBack
    Select outline color:Green
    Select objects to display:FGPSizedBack

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityFGP
    Name the output image:FGPOutline
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FB02FE
    Select objects to display:OocyteObjectsSizedBack
    Select outline color:Green
    Select objects to display:FGPSizedBack

OverlayObjects:[module_num:24|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
    Input:RescaleIntensityFGP
    Name the output image:OverlayFGP
    Objects:FGPSizedBack
    Opacity:0.3

OverlayObjects:[module_num:25|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
    Input:RescaleIntensityOocyte
    Name the output image:OverlayOocytes
    Objects:OocyteObjectsSizedBack
    Opacity:0.3

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:OverlayFGP
    Select method for constructing file names:From image filename
    Select image name for file prefix:FGP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_FGP_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:OverlayOocytes
    Select method for constructing file names:From image filename
    Select image name for file prefix:Oocyte
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Oocyte_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:OocyteOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:Oocyte
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_OocyteOutline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:FGPOutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:FGP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_FGPOutline
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:30|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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