CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:36
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.3459
    Relative pixel spacing in Y:0.3459
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does startwith "C4")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C1")
    Name to assign these images:pH3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "C2")
    Name to assign these images:nanos
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:klf4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:DNA
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Otsu

ImageMath:[module_num:6|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Threshold
    Multiply the second image by:1.0
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
MedianFilter:[module_num:7|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
    Select the input image:ImageAfterMath
    Name the output image:MedianFilter
    Window:3

Watershed:[module_num:8|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
    Select the input image:MedianFilter
    Name the output object:PreWatershed
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No

DeclumpObjects:[module_num:9|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
    Select the input object:PreWatershed
    Name the output object:Watershed
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:2
    Minimum distance between seeds:7
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Ball,1
    Watershed connectivity:1

OverlayObjects:[module_num:10|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
    Input:DNA
    Name the output image:OverlayObjects
    Objects:Watershed
    Opacity:0.3

DilateObjects:[module_num:11|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
    Select the input object:Watershed
    Name the output object:Cells
    Structuring element:ball,1

Threshold:[module_num:12|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
    Select the input image:pH3
    Name the output image:ThresholdCh1
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:2.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ErodeImage:[module_num:13|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
    Select the input image:ThresholdCh1
    Name the output image:ErodeImageCh1
    Structuring element:Disk,1

DilateImage:[module_num:14|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
    Select the input image:ErodeImageCh1
    Name the output image:DilateImageCh1
    Structuring element:disk,3

Threshold:[module_num:15|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
    Select the input image:nanos
    Name the output image:ThresholdCh2
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ErodeImage:[module_num:16|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
    Select the input image:ThresholdCh2
    Name the output image:ErodeImageCh2
    Structuring element:Disk,1

DilateImage:[module_num:17|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
    Select the input image:ErodeImageCh2
    Name the output image:DilateImageCh2
    Structuring element:disk,1

Threshold:[module_num:18|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
    Select the input image:klf4
    Name the output image:ThresholdCh3
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ErodeImage:[module_num:19|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
    Select the input image:ThresholdCh3
    Name the output image:ErodeImageCh3
    Structuring element:ball,1

DilateImage:[module_num:20|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
    Select the input image:ErodeImageCh3
    Name the output image:DilateImageCh3
    Structuring element:ball,1

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:DilateImageCh1, DilateImageCh2, DilateImageCh3
    Select objects to measure:Cells

FilterObjects:[module_num:22|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
    Select the objects to filter:Cells
    Name the output objects:Ch1PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:23|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
    Select the objects to filter:Cells
    Name the output objects:Ch2PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:24|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
    Select the objects to filter:Cells
    Name the output objects:Ch3PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:25|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
    Select the objects to filter:Cells
    Name the output objects:Ch12PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:26|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
    Select the objects to filter:Cells
    Name the output objects:Ch13PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:27|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
    Select the objects to filter:Cells
    Name the output objects:Ch23PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:28|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
    Select the objects to filter:Cells
    Name the output objects:Ch123PositiveCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh1
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_DilateImageCh3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
OverlayObjects:[module_num:29|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
    Input:pH3
    Name the output image:OverlayObjects_pH3
    Objects:Ch1PositiveCells
    Opacity:0.3

OverlayObjects:[module_num:30|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
    Input:nanos
    Name the output image:OverlayObjects_nanos
    Objects:Ch2PositiveCells
    Opacity:0.3

OverlayObjects:[module_num:31|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
    Input:klf4
    Name the output image:OverlayObjects_klf4
    Objects:Ch3PositiveCells
    Opacity:0.3

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects_pH3
    Select method for constructing file names:From image filename
    Select image name for file prefix:pH3
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay_pH3
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects_nanos
    Select method for constructing file names:From image filename
    Select image name for file prefix:nanos
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay_nanos
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects_klf4
    Select method for constructing file names:From image filename
    Select image name for file prefix:klf4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay_klf4
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:36|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notes:['Export count for positive cells of each channels as well as double and triple positives ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Children_Ch23PositiveCells_Count,Cells|Children_Ch123PositiveCells_Count,Cells|Children_Ch3PositiveCells_Count,Cells|Children_Ch12PositiveCells_Count,Cells|Children_Ch2PositiveCells_Count,Cells|Children_Ch13PositiveCells_Count,Cells|Children_Ch1PositiveCells_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
