CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does endwith "Ch4.tiff")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "_nuclei.tiff")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "small-nuclei.tiff")
    Name to assign these images:SmallNuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "sperm.tiff")
    Name to assign these images:Sperm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "background.tiff")
    Name to assign these images:Background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunStarDist:[module_num:5|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
    Select the input image:DNA
    Model Type:Custom 2D/3D
    Name the output object:RunStarDist
    Tile input image?:No
    Horizontal tiles:1
    Vertical tiles:1
    Save probability image?:No
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    Model folder:Elsewhere...|/Users/bdiazroh/Downloads/newmark_ovaries
    Model:Versatile (fluorescent nuclei)
    Model:3D_demo
    Probability threshold:0.5
    Overlap threshold:0.4

OverlayObjects:[module_num:6|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
    Input:DNA
    Name the output image:OverlayObjects
    Objects:RunStarDist
    Opacity:0.3

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_label
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Sperm
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Background
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:SmallNuclei
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Nuclei
    Multiply the fourth image by:1.0
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
ErodeImage:[module_num:9|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
    Select the input image:ImageAfterMath
    Name the output image:ErodeImage
    Structuring element:Octahedron,1

GaussianFilter:[module_num:10|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
    Select the input image:ErodeImage
    Name the output image:GaussianFilter
    Sigma:2

Watershed:[module_num:11|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
    Select the input image:GaussianFilter
    Name the output object:Sperm
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

RelateObjects:[module_num:12|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
    Parent objects:Sperm
    Child objects:RunStarDist
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MaskImage:[module_num:13|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enabled:False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
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
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    Invert the mask?:No

FilterObjects:[module_num:14|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
    Select the objects to filter:RunStarDist
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:SpermNuclei
    Select the measurement to filter by:Parent_Sperm
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.9

OverlayObjects:[module_num:15|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
    Input:DNA
    Name the output image:OverlayObjects2
    Objects:FilterObjects
    Opacity:0.3

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects2
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_la
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:FilterObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:18|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
    Select the objects to filter:FilterObjects
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:SmallNuclei
    Select the measurement to filter by:AreaShape_Volume
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:No
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
OverlayObjects:[module_num:19|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
    Input:DNA
    Name the output image:OverlayObjects3
    Objects:Nuclei
    Opacity:0.3

CombineObjects:[module_num:20|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
    Select initial object set:Sperm
    Select object set to combine:SpermNuclei
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedObjects

ImageMath:[module_num:21|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Sperm
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Background
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:SmallNuclei
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Nuclei
    Multiply the fourth image by:1.0
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
ImageMath:[module_num:22|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Sperm
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Background
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:SmallNuclei
    Multiply the third image by:1.0
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    Image or measurement?:Image
    Select the fourth image:Nuclei
    Multiply the fourth image by:1.0
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
CombineObjects:[module_num:23|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enabled:False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
    Select initial object set:CombinedObjects
    Select object set to combine:SmallNuclei
    Select how to handle overlapping objects:Merge
    Name the combined object set:SpermCenters

MeasureObjectNeighbors:[module_num:24|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
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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